begintemplate CA3Cell
	public NumSoma,NumDend
	NumSoma = 1
	NumDend = 2
	

	Rm = 80000
	Cm = 2.4 // 1.8 // 2 //1
	RaAll= 150//200
	RaSoma= 150 // 146.969697
	RaDend = 150
	Vpas = -60
	v_init = -60

	public soma, dend
	create soma[NumSoma]
	create dend[NumDend]
	

	public all, somatic, basal, apical, axonal
	objref all, somatic, basal, apical, axonal
	objref this

    proc init() {

		//Parameters.
		gnat = 0.08 //0.08 //0.06
		ghd = 0 //1.0e-5 //1.0e-5
		gkdr = 0.026 //0.04 //0.065 //0.03 //0.015
		gsahp = 0 //0.0006 //0.001 //0.005 
		gnap = 0.0014 //0.0022 //0.0022 //0.0013 //0.0009 //0.00065
		gcal = 0 //0.017 //0.005 //0.017 //0.017 

		gim  = 0.0015 //0.005 //0.007 //0.00501 //0005 //0.007 //0.009
		gcas = 0 //0.003 //0.0005 //0.0005 //0.0005

		all = new SectionList()
		somatic = new SectionList()
		basal = new SectionList()
		apical = new SectionList()
		axonal = new SectionList()

		v_init = -60

		for i=0,NumSoma soma[i] {
			all.append()
			somatic.append()
		} 
		for i=0,NumDend dend[i] {
			all.append()
			basal.append()
		}
		

		//create soma, dend, dendb
		connect dend[0](0), soma[0](0)
		connect dend[1](0), soma[0](1)

	soma[0] {
			nseg = 1
			L = 20 // (micrometer)
			diam = 10 // (micrometer)
	    	}
		
		dend[0] {
			nseg = 1
			L = 250 // (micrometer)
			diam = 3 // (micrometer)
			}
			
		dend[1] {
			nseg = 1
			L = 250 // (micrometer)
			diam = 3 // (micrometer)
			}
			
			
			

		soma[0]{
			insert leakCA3 
			el_leakCA3 = -60
			glbar_leakCA3 = 6e-5 
			Ra = 150 
			cm = 1 // 2.5
			
			insert capool
			
			insert cal
			gcalbar_cal = gcal

			insert natCA3  
			gbar_natCA3 = gnat

			insert nap//0.0
			gbar_nap = gnap 

			insert hdCA3 
			ghdbar_hdCA3 = ghd
			
			insert kdrCA3 
			gbar_kdrCA3 = gkdr
		
			insert sAHP
			gsAHPbar_sAHP = gsahp

			insert im
			gbar_im = gim

			insert cas
			gbar_cas = gcas

			ena=45  ek=-80  ehd=-45  eca = 134		
		}
				
		dend[0] {
			insert capool
			
			insert cal
			gcalbar_cal = gcal

			insert leakCA3 
			el_leakCA3 = -60  
			glbar_leakCA3 = 6e-5 
			Ra = 150 
			cm = 1.3
			
			insert natCA3  
			gbar_natCA3 = gnat

			insert nap
			gbar_nap = gnap 

			insert hdCA3 
			ghdbar_hdCA3 = ghd
			
			insert kdrCA3 
			gbar_kdrCA3 = gkdr
			
			insert sAHP
			gsAHPbar_sAHP = gsahp

			insert im
			gbar_im = gim

			insert cas
			gbar_cas = gcas

			ena=45  ek=-80  ehd=-45  eca = 134
		}
								
		dend[1] {
			insert capool

			insert cal
			gcalbar_cal = gcal

			insert leakCA3 
			el_leak = -60 
			glbar_leakCA3 = 6e-5 
			Ra = 150 
			cm = 1.3 // 2.5
			
			insert natCA3  
			gbar_natCA3 = gnat

			insert nap
			gbar_nap = gnap 

			insert hdCA3 
			ghdbar_hdCA3 =ghd 
			
			insert kdrCA3 
			gbar_kdrCA3 = gkdr

			insert sAHP
			gsAHPbar_sAHP = gsahp

			insert im
			gbar_im = gim

			insert cas
			gbar_cas = gcas
			
			ena=45  ek=-80  ehd=-45  eca = 134
		}
		
		define_shape()
	}
endtemplate CA3Cell