begintemplate OLMCell
	//public soma, adend, bdend
	//create soma, adend, bdend
	public NumSoma,NumDend
	NumSoma = 1
	NumDend = 1


	public soma, dend
	create soma[NumSoma]
	create dend[NumDend]

	public all, somatic, basal, apical, axonal
	objref all, somatic, basal, apical, axonal
	objref this

	//public soma, adend, bdend
	//create soma, adend, bdend

	proc init() { 
		//create soma, adend, bdend

		all = new SectionList()
		somatic = new SectionList()
		basal = new SectionList()
		apical = new SectionList()
		axonal = new SectionList()

		v_init = -55

		for i=0,NumSoma soma[i] {
			all.append()
			somatic.append()
		} 
		for i=0,NumDend dend[i] {
			all.append()
			basal.append()
		}


		cap  = 1.6
		gnat = 0.1
		gkdr = 0.005 //0.025
		gnap =   0.0002//0.0002
		gim  = 0.0015
		gh = 0.00000

		/////// geometry ////////
		soma[0] {
			nseg = 1
			L = 40 // (micrometer)
			diam = 40 // (micrometer)
	    }
		
		dend[0] {
			nseg = 1
			L = 200 // (micrometer)
			diam = 10 // (micrometer)
		}
			
		/////// biophysics //////
		
		soma[0]{
			cm = cap//1		    // (microF/cm2)
			Ra = 150*22.5	// (ohm-cm)
			Rm = 20000	    // (ohm-cm2)
			
			insert leakinterOLM
			insert kdrOLM
			insert natOLM
			insert imOLM
			insert napOLM
			insert hdOLM 

			ena = 55		// (mV)
				// (siemens/cm2)

			ek = -80		// (mV)
			gbar_kdrOLM = gkdr// (siemens/cm2)
			
			gbar_natOLM = gnat

			gbar_napOLM = gnap
			gbar_imOLM = gim
			ghdbar_hdOLM = gh

	    	}
			
		dend[0] {
			cm = cap//1		// (microF/cm2)
			Ra = 150	// (ohm-cm)
			Rm = 20000	// (ohm-cm2)
			
			insert leakinterOLM
			insert natOLM
			insert kdrOLM
			insert imOLM
			insert napOLM
			insert hdOLM

			ena = 55		// (mV)
				// (siemens/cm2)

			ek = -80		// (mV)
			gbar_kdrOLM = gkdr // (siemens/cm2)
			gbar_natOLM = gnat

			gbar_napOLM = gnap
			gbar_imOLM = gim
			ghdbar_hdOLM = gh

		}
			
		
	
  	connect dend[0](0), soma[0](1)
	define_shape()

	}
endtemplate OLMCell
